PsychoPy2experiment version="2024.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.1.3
  Window size (pixels) = [1920, 1080]
  expName = Stroop Task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine FixationCross
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      text = +
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  Routine StroopTrial
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    KeyboardComponent key_resp
      allowedKeys = 'm', 'c'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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  Routine Introduction
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello,
          You will see different words appear on the screen. Please press the button that corresponds to the colour of those words, not to their meaning. Press "m" for blue colour and "c" for red colour.

        Press "Space" to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine ThankYou
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for completing this task. Please let the experiementer know that you have finished.
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'Sebevražda', 'colour': [1.0, -1.0, -1.0], 'Condition': 'suicide', 'correctAnswer': 'c'},
      {'word': 'Smrt', 'colour': [-1.0, -1.0, 1.0], 'Condition': 'suicide', 'correctAnswer': 'm'},
      {'word': 'Pohřeb', 'colour': [1.0, -1.0, -1.0], 'Condition': 'suicide', 'correctAnswer': 'c'},
      {'word': 'Sám/Samotný', 'colour': [-1.0, -1.0, 1.0], 'Condition': 'negative', 'correctAnswer': 'm'},
      {'word': 'Izolovaný', 'colour': [1.0, -1.0, -1.0], 'Condition': 'negative', 'correctAnswer': 'c'},
      {'word': 'Odmítnutý', 'colour': [-1.0, -1.0, 1.0], 'Condition': 'negative', 'correctAnswer': 'm'},
      {'word': 'Šťastný', 'colour': [1.0, -1.0, -1.0], 'Condition': 'positive', 'correctAnswer': 'c'},
      {'word': 'Úspěch', 'colour': [-1.0, -1.0, 1.0], 'Condition': 'positive', 'correctAnswer': 'm'},
      {'word': 'Potěšení', 'colour': [1.0, -1.0, -1.0], 'Condition': 'positive', 'correctAnswer': 'c'},
      {'word': 'Papír', 'colour': [-1.0, -1.0, 1.0], 'Condition': 'neutral', 'correctAnswer': 'm'},
      {'word': 'Koberce', 'colour': [1.0, -1.0, -1.0], 'Condition': 'neutral', 'correctAnswer': 'c'},
      {'word': 'Motor', 'colour': [-1.0, -1.0, 1.0], 'Condition': 'neutral', 'correctAnswer': 'm'}]
    Routine FixationCross
    Routine StroopTrial
  LoopTerminator trials
  Routine ThankYou
